PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Age': '', 'Sex': "['Male','Female','Prefer not to say']", 'Vision': "['Normal','Corrected','Impaired']", 'Handedness': "['Right','Left','Ambidexterous']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop_oddball
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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  Routine stroop_trial
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    TextComponent stroop_stim
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_stroop
      allowedKeys = 'r','b','y','g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine ITI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine stroop_practice
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  Routine stroop_practice_2
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    TextComponent fixation_practice
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent practice_stim
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'r','b','y','g'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    TextComponent feedback_disp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        feedback_text = "No response"
      End Routine:
        if key_resp_2.keys and len(key_resp_2.keys) > 0:
            if key_resp_2.keys[0] == correct_key:
                feedback_text = "Correct ✔"
            else:
                feedback_text = "Wrong ✖"
        else:
            feedback_text = "No response"
  Routine practice_instruction
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    TextComponent practice_instruc
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a short practice session.

        In each trial, a word will appear in a colored ink. Your task is to respond to the colour of the ink, not the meaning of the word.

        Use the following keys:
        R = Red
        B =Blue
        G = Green
        Y = Yellow

        Try to respond as quickly and accurately as possible.

        This is just practice. You can make mistakes and learn.

        Press SPACE to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine oddball_trial
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    PolygonComponent circle_stim
      fillColor [set every repeat] = $color
      lineColor [set every repeat] = $color
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_oddball
      allowedKeys = 'space'
      correctAns = $correct_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine stroop_Instruction
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    TextComponent instructionStroop
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        You are about to start a Stroop task. This task will last 5 minutes.

        In each trial, a word will appear in a colored ink. Your task is to respond to the colour of the ink, not the meaning of the word.

        Use the following keys:
        R = Red, Y = Yellow, G = Green and B = Blue

        Remember:

        Respond to the COLOUR , not the word
        Stay fast and accurate
  Routine oddball_instruction
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    TextComponent instructionOddball
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        WELCOME

        In this task, you will see a series of circles appear one at a time.

        Most of the circles will be BLACK, while a few will be RED.

        YOUR TASK:
        - Press the SPACEBAR as quickly and accurately as possible ONLY when you see a RED circle.
        - Do NOT press any key when you see a BLACK circle.

        Respond as fast as you can while staying accurate.

        Focus on the screen at all times, as the circles will appear quickly and in random order.
  Routine Thankyou_screen
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    TextComponent thanks_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for your time and participation!
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  Routine Baseline_screen
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    TextComponent baseline_routine
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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Flow
  Routine Baseline_screen
  Routine stroop_Instruction
  LoopInitiator stroop_loop loopType="TrialHandler"
    conditionsFile = stroop_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'blue', 'color': 'blue', 'condition': 'congruent', 'correct_key': 'b', 'condition_tag': 'STROOP_CONG'},
      {'word': 'red', 'color': 'red', 'condition': 'congruent', 'correct_key': 'r', 'condition_tag': 'STROOP_CONG'},
      {'word': 'green', 'color': 'green', 'condition': 'congruent', 'correct_key': 'g', 'condition_tag': 'STROOP_CONG'},
      {'word': 'green', 'color': 'green', 'condition': 'congruent', 'correct_key': 'g', 'condition_tag': 'STROOP_CONG'},
      {'word': 'red', 'color': 'red', 'condition': 'congruent', 'correct_key': 'r', 'condition_tag': 'STROOP_CONG'},
      {'word': 'yellow', 'color': 'green', 'condition': 'incongruent', 'correct_key': 'g', 'condition_tag': 'STROOP_INCONG'},
      {'word': 'green', 'color': 'green', 'condition': 'congruent', 'correct_key': 'g', 'condition_tag': 'STROOP_CONG'},
      {'word': 'green', 'color': 'red', 'condition': 'incongruent', 'correct_key': 'r', 'condition_tag': 'STROOP_INCONG'},
      {'word': 'blue', 'color': 'yellow', 'condition': 'incongruent', 'correct_key': 'y', 'condition_tag': 'STROOP_INCONG'},
      {'word': 'green', 'color': 'red', 'condition': 'incongruent', 'correct_key': 'r', 'condition_tag': 'STROOP_INCONG'},
      {'word': 'yellow', 'color': 'blue', 'condition': 'incongruent', 'correct_key': 'b', 'condition_tag': 'STROOP_INCONG'},
      {'word': 'red', 'color': 'red', 'condition': 'congruent', 'correct_key': 'r', 'condition_tag': 'STROOP_CONG'},
      {'word': 'yellow', 'color': 'green', 'condition': 'incongruent', 'correct_key': 'g', 'condition_tag': 'STROOP_INCONG'}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
    Routine stroop_trial
    Routine ITI
  LoopTerminator stroop_loop
  Routine oddball_instruction
  LoopInitiator oddball_loop loopType="TrialHandler"
    conditionsFile = oddball_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'red', 'type': 'tgt', 'correct_key': 'space', 'condition_tag': 'ODDBALL_TARGET'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'red', 'type': 'tgt', 'correct_key': 'space', 'condition_tag': 'ODDBALL_TARGET'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'red', 'type': 'tgt', 'correct_key': 'space', 'condition_tag': 'ODDBALL_TARGET'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'red', 'type': 'tgt', 'correct_key': 'space', 'condition_tag': 'ODDBALL_TARGET'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'},
      {'color': 'red', 'type': 'tgt', 'correct_key': 'space', 'condition_tag': 'ODDBALL_TARGET'},
      {'color': 'black', 'type': 'std', 'correct_key': 'n/a', 'condition_tag': 'ODDBALL_STANDARD'}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
    Routine oddball_trial
    Routine ITI
  LoopTerminator oddball_loop
  Routine Thankyou_screen
